#@ File (label = "Input folder", style = "file") input

run("Close All");
open(input);
name = getTitle();
run("Duplicate...", "use");
run("Gaussian Blur...", "sigma=5");
run("Find Maxima...", "prominence=10000 output=[Point Selection]");
getSelectionBounds(x, y, width, height);
close();
print(x)
print(y)
selectWindow(name);
makeRectangle(x-32, y-32, 64, 64);
run("Crop");
run("Convolve...", "text1=[-1 -1 -1 -1 -1\n-1 -1 -1 -1 -1\n-1 -1 24 -1 -1\n-1 -1 -1 -1 -1\n-1 -1 -1 -1 -1\n] normalize stack");

run("Set Measurements...", "mean redirect=None decimal=3");
run("Select All");
roiManager("Add");
roiManager("Multi Measure");

meanx=newArray(nResults());
maxIdx = 0;
for (i = 0; i < nResults(); i++) {
	meanx[i]=getResult("Mean1", i);
}

//beginning of moving mean
meanxmm = Array.copy(meanx);
x = Array.copy(meanx);
windowC=2;
for (i=0;i<meanx.length;i++){ 
	if (i<windowC){ //start
		temp = Array.slice(meanx,0,1+i+windowC);
	}else if (i>(meanx.length)){ //end
		temp = Array.slice(meanx,i-windowC,array.length);
	}else { //middle
		temp=Array.slice(meanx,i-windowC,i+windowC+1);
	}
	Array.getStatistics(temp, min, max, mean, stdDev);
	meanxmm[i] = mean;
	x[i]=i;
}
Plot.create("Title", "X-axis Label", "Y-axis Label", x, meanx)
Plot.add("line", x, meanxmm)
//find first top
for (i = 1; i < meanxmm.length; i++) {
	if (meanxmm[i]<meanxmm[i-1]){
		maxIdx=i;
		break;
	}
}
print(maxIdx)